PsychoPy2experiment version="2022.2.5"
Settings
  Data filename = u'data/' + expInfo['participant'] + '/%s_%s_%s' % (expInfo['participant'], expName, expInfo['date'])
  Experiment info = {'participant': '0000', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Save csv file = True
  Screen = 2
  Show mouse = True
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = odd_one_out_experiment
  keyboardBackend = ioHub
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Routines
  Routine welcome
    TextComponent welcomeText
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        Welcome, in this experiment you will be presented with three chess scenario's, side-by-side.

        It is your task to select the odd-one-out. In other words, choose the one you think is the most different when comparing to the other two scenario's.

        To select the odd-one-out you can use your mouse. Click on the scenario you think is the most distinct.

        We will first show you an example of a single trial. It is not necessary to pay attention to the correctness of the decision, rather focus on the general lay-out of the task.

        After the example you can practice the task yourself.

        Press <space> to continue...
    KeyboardComponent key_resp
      allowedKeys [set every repeat] = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 1
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    CodeComponent code
      Code Type = Auto->JS
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      Before Experiment:
        import pandas as pd
        # Set number of trials you want to show for practice/main parts of experiment
        nPract = 10
        nMain = 10

        nTotal = nPract + nMain
        # Load all possible conditions from triplets.csv
        df = pd.read_csv('triplets.csv')
        sampled = df.sample(nTotal)
        # Sample practice trials and main trials
        samplePract = sampled[:nPract]
        sampleMain = sampled[nPract:nTotal]
        # Store these trials in separate files that are to be used later on
        samplePract.to_csv('practice_triplets.csv', index=False)
        sampleMain.to_csv('main_triplets.csv', index=False)
  Routine practice
    PolygonComponent fixation_practice
      fillColor = white
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    PolygonComponent frame1
      fillColor = 0.0000, 0.0000, 0.0000
      lineWidth = 2
      pos = (-0.5, 0)
      saveStartStop = False
      shape = rectangle
      size = (0.45, 0.45)
      startVal [time (s)] = 0.5
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    PolygonComponent frame2
      fillColor = 0.0000, 0.0000, 0.0000
      lineWidth = 2
      saveStartStop = False
      shape = rectangle
      size = (0.45, 0.45)
      startVal [time (s)] = 0.5
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    PolygonComponent frame3
      fillColor = 0.0000, 0.0000, 0.0000
      lineWidth = 2
      pos = (0.5, 0)
      saveStartStop = False
      shape = rectangle
      size = (0.45, 0.45)
      startVal [time (s)] = 0.5
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    ImageComponent stim1_pract
      image [set every repeat] = $'../datasets/fmri_dataset/images/' + Stim1
      pos = (-0.5, 0)
      size = (0.4, 0.4)
      startVal [time (s)] = 0.5
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    ImageComponent stim2_pract
      image [set every repeat] = $'../datasets/fmri_dataset/images/' + Stim2
      size = (0.4, 0.4)
      startVal [time (s)] = 0.5
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    ImageComponent stim3_pract
      image [set every repeat] = $'../datasets/fmri_dataset/images/' + Stim3
      pos = (0.5, 0)
      size = (0.4, 0.4)
      startVal [time (s)] = 0.5
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    MouseComponent mouse_pract
      clickable = stim1_pract, stim2_pract, stim3_pract
      forceEndRoutineOnPress = valid click
      saveMouseState = on valid click
      startVal [time (s)] = 0.5
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    TextComponent question_text
      letterHeight = 0.05
      pos = (0, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.5
      text = Which is the odd-one-out?
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    CodeComponent code_pract
      Code Type = Auto->JS
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      Each Frame:
        # Get mouse position
        mouseX, mouseY = mouse_pract.getPos()

        if stim1_pract.contains(mouseX, mouseY):
            frame1.opacity = 1
        else:
            frame1.opacity = 0

        if stim2_pract.contains(mouseX, mouseY):
            frame2.opacity = 1
        else:
            frame2.opacity = 0

        if stim3_pract.contains(mouseX, mouseY):
            frame3.opacity = 1
        else:
            frame3.opacity = 0
  Routine experiment
    PolygonComponent fixation_main
      fillColor = white
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    PolygonComponent frame1_main
      fillColor = 0.0000, 0.0000, 0.0000
      lineWidth = 2
      pos = (-0.5, 0)
      saveStartStop = False
      shape = rectangle
      size = (0.45, 0.45)
      startVal [time (s)] = 0.5
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    PolygonComponent frame2_main
      fillColor = 0.0000, 0.0000, 0.0000
      lineWidth = 2
      saveStartStop = False
      shape = rectangle
      size = (0.45, 0.45)
      startVal [time (s)] = 0.5
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    PolygonComponent frame3_main
      fillColor = 0.0000, 0.0000, 0.0000
      lineWidth = 2
      pos = (0.5, 0)
      saveStartStop = False
      shape = rectangle
      size = (0.45, 0.45)
      startVal [time (s)] = 0.5
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    ImageComponent stim1_main
      image [set every repeat] = $'../datasets/fmri_dataset/images/' + Stim1
      pos = (-0.5, 0)
      size = (0.4, 0.4)
      startVal [time (s)] = 0.5
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    ImageComponent stim2_main
      image [set every repeat] = $'../datasets/fmri_dataset/images/' + Stim2
      size = (0.4, 0.4)
      startVal [time (s)] = 0.5
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    ImageComponent stim3_main
      image [set every repeat] = $'../datasets/fmri_dataset/images/' + Stim3
      pos = (0.5, 0)
      size = (0.4, 0.4)
      startVal [time (s)] = 0.5
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    MouseComponent mouse_main
      clickable = stim1_main, stim2_main, stim3_main
      forceEndRoutineOnPress = valid click
      saveMouseState = on valid click
      startVal [time (s)] = 0.5
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    TextComponent question_text_2
      letterHeight = 0.05
      pos = (0, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.5
      text = Which is the odd-one-out?
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    CodeComponent code_main
      Code Type = Auto->JS
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      Each Frame:
        # Get mouse position
        mouseX, mouseY = mouse_main.getPos()

        if stim1_main.contains(mouseX, mouseY):
            frame1_main.opacity = 1
        else:
            frame1_main.opacity = 0

        if stim2_main.contains(mouseX, mouseY):
            frame2_main.opacity = 1
        else:
            frame2_main.opacity = 0

        if stim3_main.contains(mouseX, mouseY):
            frame3_main.opacity = 1
        else:
            frame3_main.opacity = 0
  Routine exit
    TextComponent text_exit
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        That was it!

        Thank you for your time and attention.

        Press <space> to leave the experiment.
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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  Routine pause
    TextComponent pauseText
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        We have finished practicing!

        Let's start with the experiment, the task remains the same as it was during practice.

        Press <space> to continue...
    KeyboardComponent key_resp_pause
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine example
    ImageComponent instr_image
      image [set every frame] = instructFrame1.png
      size = (1.7, 1)
      startVal [time (s)] = 0
      texture resolution = 256
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    TextComponent text
      letterHeight = 0.03
      pos = (0, -0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Let's say you think the most distinct scenario is the one in the middle.
        You can then use your mouse to select this specific scenario as the odd-one-out.

        Press <space> to continue to the practice trials...
    KeyboardComponent key_example
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine example_text
    TextComponent ex_screentext
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Now we will let you practice.

        Remember to use your mouse to select the odd-one-out.

        Press <space> to continue...
    KeyboardComponent key_example_text
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine welcome
  Routine example
  LoopInitiator practiceTrials loopType="TrialHandler"
    conditionsFile = practice_triplets.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('Stim1', 'C2_Images_Replacement4.png'), ('Stim2', 'C3_Images_KazicVukovic(Reversed).png'), ('Stim3', 'NC3_Images_Replacement3(Nomate).png')]),
      OrderedDict([('Stim1', 'C3_Images_Replacement3.png'), ('Stim2', 'C4_Images_IvanchukSavchenko(Reversed).png'), ('Stim3', 'C2_Images_Replacement4.png')]),
      OrderedDict([('Stim1', 'NC2_Images_KekhayovPetrov(Nomate)(Reversed).png'), ('Stim2', 'NC3_Images_StudybyErcoleDelRio(Nomate)(Reversed).png'), ('Stim3', 'C2_Images_KrauseMeinhardt.png')]),
      OrderedDict([('Stim1', 'NC3_Images_TylorWinter(Nomate).png'), ('Stim2', 'C1_Images_WinterFriede(Reversed).png'), ('Stim3', 'C3_Images_PodzerovKuntzevic(Reversed).png')]),
      OrderedDict([('Stim1', 'C2_Images_KrauseMeinhardt.png'), ('Stim2', 'C4_Images_BrankaWittwer(Reversed).png'), ('Stim3', 'NC3_Images_KazicVukovic(Nomate)(Reversed).png')]),
      OrderedDict([('Stim1', 'NC3_Images_Replacement3(Nomate).png'), ('Stim2', 'C4_Images_BrankaWittwer(Reversed).png'), ('Stim3', 'C3_Images_Replacement3.png')]),
      OrderedDict([('Stim1', 'C3_Images_MalininAndreev(Reversed).png'), ('Stim2', 'NC2_Images_KekhayovPetrov(Nomate)(Reversed).png'), ('Stim3', 'NC5_Images_EasyPosition6(Nomate).png')]),
      OrderedDict([('Stim1', 'NC3_Images_KazicVukovic(Nomate)(Reversed).png'), ('Stim2', 'NC2_Images_KrauseMeinhardt(Nomate).png'), ('Stim3', 'C5_Images_EasyPosition2.png')])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
    Routine practice
  LoopTerminator practiceTrials
  Routine pause
  LoopInitiator mainTrials loopType="TrialHandler"
    conditionsFile = main_triplets.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('Stim1', 'C2_Images_KekhayovPetrov(Reversed).png'), ('Stim2', 'NC1_Images_WinterFriede(Nomate)(Reversed).png'), ('Stim3', 'C5_Images_EasyPosition6.png')]),
      OrderedDict([('Stim1', 'C3_Images_PodzerovKuntzevic(Reversed).png'), ('Stim2', 'NC4_Images_StrekalovskyShaposhlikov(Nomate).png'), ('Stim3', 'C3_Images_StudybyErcoledelRio(Reversed).png')]),
      OrderedDict([('Stim1', 'C3_Images_Replacement5.png'), ('Stim2', 'C5_Images_EasyPosition2.png'), ('Stim3', 'C5_Images_EasyPosition5(Reversed).png')]),
      OrderedDict([('Stim1', 'C5_Images_EasyPosition6.png'), ('Stim2', 'NC3_Images_MalininAndreev(Nomate)(Reversed).png'), ('Stim3', 'NC4_Images_IvanchukSavchenko(Nomate)(Reversed).png')]),
      OrderedDict([('Stim1', 'NC3_Images_TylorWinter(Nomate).png'), ('Stim2', 'NC4_Images_StrekalovskyShaposhlikov(Nomate).png'), ('Stim3', 'C2_Images_KekhayovPetrov(Reversed).png')]),
      OrderedDict([('Stim1', 'NC1_Images_WinterFriede(Nomate)(Reversed).png'), ('Stim2', 'NC2_Images_KekhayovPetrov(Nomate)(Reversed).png'), ('Stim3', 'NC1_Images_Frombeautiful(Nomate).png')]),
      OrderedDict([('Stim1', 'C5_Images_EasyPosition6.png'), ('Stim2', 'C4_Images_BrankaWittwer(Reversed).png'), ('Stim3', 'C2_Images_Replacement4.png')]),
      OrderedDict([('Stim1', 'NC3_Images_MalininAndreev(Nomate)(Reversed).png'), ('Stim2', 'C3_Images_Replacement3.png'), ('Stim3', 'NC1_Images_SteinitzNN(Nomate).png')])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
    Routine experiment
  LoopTerminator mainTrials
  Routine exit
